PsychoPy2experiment version="2024.1.1"
Settings
  Data filename = ''
  Experiment info = {'participant': '', 'session': '001'}
  Logging level = exp
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Color = $[0,0,0]
  Color space = rgb
  Units = height
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Routines
  Routine welcome
    TextComponent welcome_text
      text = Welcome to survey-gad7
      height = 0.05
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    KeyboardComponent welcome_key
      keys = ['space']
      text = Press SPACE to continue
  Routine group_questions
    FormComponent form_group_questions
      items = [{'questionText': {'en': 'Feeling nervous, anxious or on edge'}, 'responseType': 'choice', 'choices': ["0: {'en': '{score=0} not at all'}", "1: {'en': '{score=1} several days'}", "2: {'en': '{score=2} more than half the days'}", "3: {'en': '{score=3} nearly every day'}"]}, {'questionText': {'en': 'Not being able to stop or control worrying'}, 'responseType': 'choice', 'choices': ["0: {'en': '{score=0} not at all'}", "1: {'en': '{score=1} several days'}", "2: {'en': '{score=2} more than half the days'}", "3: {'en': '{score=3} nearly every day'}"]}, {'questionText': {'en': 'Worrying too much about different things'}, 'responseType': 'choice', 'choices': ["0: {'en': '{score=0} not at all'}", "1: {'en': '{score=1} several days'}", "2: {'en': '{score=2} more than half the days'}", "3: {'en': '{score=3} nearly every day'}"]}, {'questionText': {'en': 'Trouble relaxing'}, 'responseType': 'choice', 'choices': ["0: {'en': '{score=0} not at all'}", "1: {'en': '{score=1} several days'}", "2: {'en': '{score=2} more than half the days'}", "3: {'en': '{score=3} nearly every day'}"]}, {'questionText': {'en': 'Being so restless that it is hard to sit still'}, 'responseType': 'choice', 'choices': ["0: {'en': '{score=0} not at all'}", "1: {'en': '{score=1} several days'}", "2: {'en': '{score=2} more than half the days'}", "3: {'en': '{score=3} nearly every day'}"]}, {'questionText': {'en': 'Becoming easily annoyed or irritable'}, 'responseType': 'choice', 'choices': ["0: {'en': '{score=0} not at all'}", "1: {'en': '{score=1} several days'}", "2: {'en': '{score=2} more than half the days'}", "3: {'en': '{score=3} nearly every day'}"]}, {'questionText': {'en': 'Feeling afraid as if something awful might happen'}, 'responseType': 'choice', 'choices': ["0: {'en': '{score=0} not at all'}", "1: {'en': '{score=1} several days'}", "2: {'en': '{score=2} more than half the days'}", "3: {'en': '{score=3} nearly every day'}"]}]
      randomize = False
  Routine thanks
    TextComponent thanks_text
      text = Thank you for participating!
      duration = 2.0
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Flow
  Routine welcome
  Routine group_questions
  Routine thanks
