PsychoPy2experiment version="2024.1.1"
Settings
  Data filename = ''
  Experiment info = {'participant': '', 'session': '001'}
  Logging level = exp
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Color = $[0,0,0]
  Color space = rgb
  Units = height
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Routines
  Routine welcome
    TextComponent welcome_text
      text = Welcome to survey-phq9
      height = 0.05
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    KeyboardComponent welcome_key
      keys = ['space']
      text = Press SPACE to continue
  Routine group_questions
    FormComponent form_group_questions
      items = [{'questionText': {'en': 'Little interest or pleasure in doing things'}, 'responseType': 'choice', 'choices': ["0: {'en': '{score=0} not at all'}", "1: {'en': '{score=1} several days'}", "2: {'en': '{score=2} more than half the days'}", "3: {'en': '{score=3} nearly every day'}"]}, {'questionText': {'en': 'Feeling down, depressed, or hopeless'}, 'responseType': 'choice', 'choices': ["0: {'en': '{score=0} not at all'}", "1: {'en': '{score=1} several days'}", "2: {'en': '{score=2} more than half the days'}", "3: {'en': '{score=3} nearly every day'}"]}, {'questionText': {'en': 'Trouble falling or staying asleep, or sleeping too much'}, 'responseType': 'choice', 'choices': ["0: {'en': '{score=0} not at all'}", "1: {'en': '{score=1} several days'}", "2: {'en': '{score=2} more than half the days'}", "3: {'en': '{score=3} nearly every day'}"]}, {'questionText': {'en': 'Feeling tired or having little energy'}, 'responseType': 'choice', 'choices': ["0: {'en': '{score=0} not at all'}", "1: {'en': '{score=1} several days'}", "2: {'en': '{score=2} more than half the days'}", "3: {'en': '{score=3} nearly every day'}"]}, {'questionText': {'en': 'Poor appetite or overeating'}, 'responseType': 'choice', 'choices': ["0: {'en': '{score=0} not at all'}", "1: {'en': '{score=1} several days'}", "2: {'en': '{score=2} more than half the days'}", "3: {'en': '{score=3} nearly every day'}"]}, {'questionText': {'en': 'Feeling bad about yourself - or that you are a failure or have let yourself or your family down'}, 'responseType': 'choice', 'choices': ["0: {'en': '{score=0} not at all'}", "1: {'en': '{score=1} several days'}", "2: {'en': '{score=2} more than half the days'}", "3: {'en': '{score=3} nearly every day'}"]}, {'questionText': {'en': 'Trouble concentrating on things, such as reading the newspaper or watching television'}, 'responseType': 'choice', 'choices': ["0: {'en': '{score=0} not at all'}", "1: {'en': '{score=1} several days'}", "2: {'en': '{score=2} more than half the days'}", "3: {'en': '{score=3} nearly every day'}"]}, {'questionText': {'en': 'Moving or speaking so slowly that other people could have noticed? Or the opposite - being so fidgety or restless that you have been moving around a lot more than usual'}, 'responseType': 'choice', 'choices': ["0: {'en': '{score=0} not at all'}", "1: {'en': '{score=1} several days'}", "2: {'en': '{score=2} more than half the days'}", "3: {'en': '{score=3} nearly every day'}"]}, {'questionText': {'en': 'Thoughts that you would be better off dead or of hurting yourself in some way'}, 'responseType': 'choice', 'choices': ["0: {'en': '{score=0} not at all'}", "1: {'en': '{score=1} several days'}", "2: {'en': '{score=2} more than half the days'}", "3: {'en': '{score=3} nearly every day'}"]}]
      randomize = False
  Routine thanks
    TextComponent thanks_text
      text = Thank you for participating!
      duration = 2.0
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Flow
  Routine welcome
  Routine group_questions
  Routine thanks
